PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = paired-associates
  logging level = debug
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Routines
  Routine check
    TextComponent here
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = here
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  Routine Instr1
    TextComponent InstrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For this task you have to remember a series of word pairs.

        During each block a series of word pairs will appear in the middle of the screen.

        Each word pair will be presented for 2 seconds before moving onto the next pair.


        [Press “SPACE” to continue]
    KeyboardComponent instr1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        // default values
        var word1 = "";
        var word2 = "";
  Routine Instr2
    TextComponent instr2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After viewing 10 word pairs you must recall the BOTTOM word for each pair.

        The pairs will not be presented in the same order in which you saw them originally.

        When it is time to recall the words, you will see the top word but no bottom word. You will have 5 seconds to type the bottom word and press the ‘RETURN/ENTER’ to submit your response.

        [Press “SPACE” when you are ready to begin]
    KeyboardComponent instr2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr3
    TextComponent practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let’s try a practice block with 3 word pairs.


        [Press “SPACE” to continue]
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_probe
    TextComponent practice_top_text
      letterHeight = 0.1
      pos = (0, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $word1
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    TextboxComponent practice_probe_text
      bold = False
      borderColor = grey
      editable = True
      fillColor = grey
      letterHeight = 0.05
      pos [set every repeat] = (0, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent practice_submit
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent practice_code
      Code Type = JS
      Each JS Frame:
        practice_probe_text._pixi.focus()
  Routine prime
    TextComponent top_word
      letterHeight = 0.05
      pos = (0, .05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word1
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    TextComponent bot_word
      letterHeight = 0.05
      pos = (0, -.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word2
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine probe
    TextComponent top_text
      letterHeight = 0.05
      pos = (0, .05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word1
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    CodeComponent check_keys
      Code Type = JS
      Begin JS Experiment:
        // Store accuracies
        allResponses = []
      Begin JS Routine:
        inputText = "";
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys()
        n = keys.length
        i = 0

        while (i < n) {

            if (keys[i].length == 1){
                inputText += keys[i]
                i += 1
            } else if (keys[i] == 'backspace') {
                inputText = inputText.slice(0,-1)
                i += 1
            } else if (keys[i] == 'space') {
                inputText += " ";
                i += 1
            } else if (keys[i] == 'return') {
                continueRoutine = false
                i += 1
            } else if (keys[i] == 'escape') {
                psychoJS.quit()
                break
            } else {
                i += 1
            }
            inputDisplay.setText(">"+inputText);
        }
      End JS Routine:
        acc = 0;

        if (inputText === word2) {
            acc = 1;
            msg = "Correct";
            psychoJS.experiment.addData("correct", acc)
        } else {
            msg = "Incorrect";
            psychoJS.experiment.addData("Incorrect", acc)
        }
        psychoJS.experiment.addData("response", inputText);

        allResponses.push(acc)
        inputDisplay.setText('');
    TextComponent inputDisplay
      letterHeight = 0.05
      pos = (0, -.05)
      startVal [time (s)] = 0
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  Routine practice_prime
    TextComponent practice_top_word
      letterHeight = 0.05
      pos = (0, .05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word1
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    TextComponent practice_bot_word
      letterHeight = 0.05
      pos = (0, -.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $word2
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    PolygonComponent practice_fixation
      fillColor = white
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial_start
    TextComponent text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press ‘SPACE’ to start the block
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_start
    TextComponent ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Ready to start the task?

        Press [‘SPACE’ to begin]
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_2
  Routine rng
    TextComponent rng_instr
      letterHeight = 0.05
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text = This is your 4-digit completion code. Please write this down for later use. When you are finished, press SPACE to end the experiment. 
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    TextComponent rng_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $random_number
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    KeyboardComponent rng_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent rng_code
      Code Type = JS
      Begin JS Experiment:
        random_number = Math.floor(Math.random() * 9999) + 1000;
Flow
  Routine Instr1
  Routine Instr2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = block_files.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'file_name': 'block1.xlsx'},
      {'file_name': 'block2.xlsx'},
      {'file_name': 'block3.xlsx'}]
    Routine trial_start
    LoopInitiator prime_loop loopType="TrialHandler"
      conditionsFile = $file_name
      loopType = random
      nReps = 1
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      Routine prime
    LoopTerminator prime_loop
    LoopInitiator probe_loop loopType="TrialHandler"
      conditionsFile = $file_name
      isTrials = False
      loopType = random
      nReps = 1
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      Routine probe
    LoopTerminator probe_loop
  LoopTerminator trials
  Routine rng
